[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "import 24 movies",
        "object.comment": "Relion 3 tutorial movies:\n\nMicroscope Jeol Cryo-ARM 200\nData courtesy of Takyuki Kato in the Namba group\n(Osaka University, Japan)",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/usr/local/scipion/data/tests/relion30_tutorial/Movies/",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 200.0,
        "sphericalAberration": 1.4,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.885,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": 1.277,
        "gainFile": "/usr/local/scipion/data/tests/relion30_tutorial/Movies/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "ProtRelionAssignOpticsGroup",
        "object.id": "86",
        "object.label": "assign optics",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputType": 0,
        "opticsGroupName": "OpticsGroup1",
        "mtfFile": null,
        "beamTiltX": 0.0,
        "beamTiltY": 0.0,
        "defectFile": null,
        "inputStar": null,
        "inputSet": "2.outputMovies"
    },
    {
        "object.className": "ProtRelionMotioncor",
        "object.id": "145",
        "object.label": "relion - motioncor",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "doDW": true,
        "saveNonDW": false,
        "savePSsum": false,
        "dosePSsum": 4.0,
        "extraParams": "",
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "bfactor": 150,
        "patchX": 5,
        "patchY": 5,
        "groupFrames": 1,
        "binFactor": 1.0,
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "86.outputMovies"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "233",
        "object.label": "gctf",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "windowSize": 512,
        "lowRes": 0.04,
        "highRes": 0.21,
        "minDefocus": 5000.0,
        "maxDefocus": 90000.0,
        "stepDefocus": 500.0,
        "astigmatism": 100.0,
        "plotResRing": true,
        "gpuList": "0",
        "doEPA": false,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "overlap": 0.5,
        "convsize": 85,
        "bfactor": 150,
        "doHighRes": false,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "145.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtRelionAutopickLoG",
        "object.id": "303",
        "object.label": "relion - autopick log",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": 250,
        "minDiameter": 150,
        "maxDiameter": 180,
        "areParticlesWhite": false,
        "maxResolution": 20.0,
        "threshold": 0.0,
        "threshold2": 999.0,
        "extraParams": "",
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputMicrographs": "145.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "351",
        "object.label": "relion - extract",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": 256,
        "doRescale": true,
        "rescaledSize": 64,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": 200,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 2,
        "ctfRelations": "233.outputCTF",
        "inputCoordinates": "303.outputCoordinates"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "417",
        "object.label": "relion - 2d",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": 200,
        "maskZero": 0,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 100,
        "regularisationParamT": 2,
        "numberOfIterations": 25,
        "useFastSubsets": false,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 5.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "allowCoarserSampling": false,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "--maxsig 25",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 3,
        "inputParticles": "351.outputParticles"
    },
    {
        "object.className": "ProtRelionInitialModel",
        "object.id": "601",
        "object.label": "relion - 3D initial model",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doContinue": false,
        "maskDiameterA": 200,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "numberOfClasses": 1,
        "doFlattenSolvent": true,
        "symmetryGroup": "c1",
        "angularSamplingDeg": 1,
        "offsetSearchRangePix": 6.0,
        "offsetSearchStepPix": 2.0,
        "numberOfIterInitial": 25,
        "numberOfIterInBetween": 100,
        "numberOfIterFinal": 25,
        "writeIter": 10,
        "initialRes": 35,
        "finalRes": 15,
        "initialBatch": 100,
        "finalBatch": 500,
        "sgdNoiseVar": -1,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "skipPadding": false,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "extraParams": "--maxsig 25",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 5,
        "inputParticles": "967.outputParticles"
    },
    {
        "object.className": "ProtRelionSymmetrizeVolume",
        "object.id": "664",
        "object.label": "relion - symmetrize volume",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "symmetryGroup": "d2",
        "hostName": "localhost",
        "inputVolume": "601.outputVolume"
    },
    {
        "object.className": "ProtRelionClassify3D",
        "object.id": "695",
        "object.label": "relion - 3D classification",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": 200,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "d2",
        "initialLowPassFilterA": 60.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 4,
        "regularisationParamT": 4,
        "numberOfIterations": 25,
        "useFastSubsets": false,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localAngularSearch": false,
        "localAngularSearchRange": 5.0,
        "allowCoarserSampling": false,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "skipPadding": false,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "--maxsig 25",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 5,
        "inputParticles": "601.outputParticles",
        "referenceVolume": "664.outputVolumeAligned"
    },
    {
        "object.className": "ProtExtractCoords",
        "object.id": "811",
        "object.label": "scipion - extract coordinates",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "applyShifts": true,
        "hostName": "localhost",
        "inputMicrographs": "145.outputMicrographsDoseWeighted",
        "inputParticles": "1085.outputParticles"
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "844",
        "object.label": "relion - extract (copy)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": 256,
        "doRescale": false,
        "rescaledSize": 64,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": 200,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "ctfRelations": "233.outputCTF",
        "inputCoordinates": "811.outputCoordinates"
    },
    {
        "object.className": "ProtRelionRefine3D",
        "object.id": "890",
        "object.label": "relion - 3D auto-refine",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": false,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": 200,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "d2",
        "initialLowPassFilterA": 40.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSamplingDeg": 4,
        "useFinerSamplingFaster": false,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "skipPadding": false,
        "allParticlesRam": false,
        "scratchDir": "/scratch/",
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "--maxsig 50",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 5,
        "referenceVolume": "695.outputVolumes.2",
        "inputParticles": "844.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "967",
        "object.label": "good parts",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/000417_ProtRelionClassify2D/classes2D_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "417.outputClasses"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "1085",
        "object.label": "good parts 3d",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": "1028",
        "sqliteFile": "Runs/000695_ProtRelionClassify3D/classes3D_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "695."
    },
    {
        "object.className": "ProtRelionCreateMask3D",
        "object.id": "1200",
        "object.label": "relion - create 3d mask",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "initialLowPassFilterA": 30.0,
        "threshold": 0.002,
        "doCompare": false,
        "operation": 0,
        "extend": 3,
        "edge": 3,
        "doInvert": false,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "inputVolume": "890.outputVolume"
    },
    {
        "object.className": "ProtRelionPostprocess",
        "object.id": "1245",
        "object.label": "relion - post-processing",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "calibratedPixelSize": 0.0,
        "mtf": "/usr/local/scipion/source/plugins/scipion-em-relion/relion/convert/mtfs/mtf_f3_200_ec.star",
        "origPixelSize": -1.0,
        "doAutoBfactor": true,
        "bfactorLowRes": 10.0,
        "bfactorHighRes": 0.0,
        "bfactor": -350.0,
        "skipFscWeighting": false,
        "lowRes": 5.0,
        "filterEdgeWidth": 2,
        "randomizeAtFsc": 0.8,
        "hostName": "localhost",
        "numberOfMpi": 8,
        "protRefine": "890.",
        "solventMask": "1200.outputMask"
    },
    {
        "object.className": "ProtRelionCtfRefinement",
        "object.id": "1294",
        "object.label": "relion - ctf refinement (beamtilt)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "estimateAnisoMag": false,
        "doCtfFitting": false,
        "fitDefocus": 2,
        "fitAstig": 0,
        "fitBfactor": 1,
        "fitPhaseShift": 0,
        "doBeamtiltEstimation": true,
        "doEstimateTrefoil": true,
        "doEstimate4thOrder": true,
        "minResolution": 30.0,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 5,
        "inputParticles": "890.outputParticles",
        "inputPostprocess": "1245."
    },
    {
        "object.className": "ProtRelionCtfRefinement",
        "object.id": "1377",
        "object.label": "relion - ctf refinement (anis mag)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "estimateAnisoMag": true,
        "doCtfFitting": false,
        "fitDefocus": 2,
        "fitAstig": 0,
        "fitBfactor": 1,
        "fitPhaseShift": 0,
        "doBeamtiltEstimation": true,
        "doEstimateTrefoil": true,
        "doEstimate4thOrder": true,
        "minResolution": 30.0,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 5,
        "inputPostprocess": "1245.",
        "inputParticles": "1294.outputParticles"
    },
    {
        "object.className": "ProtRelionCtfRefinement",
        "object.id": "1440",
        "object.label": "relion - ctf refinement (params)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "estimateAnisoMag": false,
        "doCtfFitting": true,
        "fitDefocus": 2,
        "fitAstig": 1,
        "fitBfactor": 0,
        "fitPhaseShift": 0,
        "doBeamtiltEstimation": false,
        "doEstimateTrefoil": true,
        "doEstimate4thOrder": true,
        "minResolution": 30.0,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 5,
        "inputPostprocess": "1245.",
        "inputParticles": "1377.outputParticles"
    },
    {
        "object.className": "ProtRelionRefine3D",
        "object.id": "1705",
        "object.label": "relion - 3D auto-refine (copy 2)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": false,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": 200,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": true,
        "symmetryGroup": "d2",
        "initialLowPassFilterA": 20.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 3,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSamplingDeg": 4,
        "useFinerSamplingFaster": false,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "skipPadding": false,
        "allParticlesRam": false,
        "scratchDir": "/scratch/",
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 5,
        "referenceVolume": "890.outputVolume",
        "referenceMask": "1200.outputMask",
        "inputParticles": "1440.outputParticles"
    },
    {
        "object.className": "ProtRelionCreateMask3D",
        "object.id": "1782",
        "object.label": "relion - create 3d mask (copy 2)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "initialLowPassFilterA": 30.0,
        "threshold": 0.002,
        "doCompare": false,
        "operation": 0,
        "extend": 3,
        "edge": 3,
        "doInvert": false,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "inputVolume": "1705.outputVolume"
    },
    {
        "object.className": "ProtRelionPostprocess",
        "object.id": "1821",
        "object.label": "relion - post-processing (copy 2)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "calibratedPixelSize": 0.0,
        "mtf": "/usr/local/scipion/source/plugins/scipion-em-relion/relion/convert/mtfs/mtf_f3_200_ec.star",
        "origPixelSize": -1.0,
        "doAutoBfactor": true,
        "bfactorLowRes": 10.0,
        "bfactorHighRes": 0.0,
        "bfactor": -350.0,
        "skipFscWeighting": false,
        "lowRes": 5.0,
        "filterEdgeWidth": 2,
        "randomizeAtFsc": 0.8,
        "hostName": "localhost",
        "numberOfMpi": 8,
        "protRefine": "1705.",
        "solventMask": "1782.outputMask"
    },
    {
        "object.className": "SphireProtCRYOLOPicking",
        "object.id": "1909",
        "object.label": "sphire - cryolo picking",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputModelFrom": 0,
        "conservPickVar": 0.3,
        "lowPassFilter": false,
        "absCutOffFreq": 0.1,
        "numCpus": 4,
        "input_size": 1024,
        "boxSize": 0,
        "max_box_per_image": 600,
        "useGpu": true,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 16,
        "inputMicrographs": "145.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "1954",
        "object.label": "cistem - ctffind4",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "avgFrames": 3,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 100.0,
        "slowSearch": false,
        "fixAstig": false,
        "astigmatism": 500.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "145.outputMicrographsDoseWeighted"
    }
]