[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "import 24 movies",
        "object.comment": "Relion 3 tutorial movies:\n\nMicroscope Jeol Cryo-ARM 200\nData courtesy of Takyuki Kato in the Namba group\n(Osaka University, Japan)",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/usr/local/scipion/v2.0.0/data/tests/relion30_tutorial/Movies/",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 200.0,
        "sphericalAberration": 1.4,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 0.885,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": 1.277,
        "gainFile": "/usr/local/scipion/v2.0.0/data/tests/relion30_tutorial/Movies/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "ProtRelionMotioncor",
        "object.id": "85",
        "object.label": "relion - motioncor",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "doDW": false,
        "saveNonDW": false,
        "bfactor": 150,
        "patchX": 5,
        "patchY": 5,
        "groupFrames": 1,
        "binFactor": 1.0,
        "gainRot": 0,
        "gainFlip": 0,
        "extraParams": "",
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "168",
        "object.label": "gctf",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "AutoDownsampling": false,
        "ctfDownFactor": 1.0,
        "lowRes": 0.04,
        "highRes": 0.21,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "astigmatism": 100.0,
        "plotResRing": true,
        "gpuList": "0",
        "doEPA": false,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "overlap": 0.5,
        "convsize": 85,
        "bfactor": 150,
        "doHighRes": false,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "85.outputMicrographs"
    },
    {
        "object.className": "ProtRelionAutopickLoG",
        "object.id": "238",
        "object.label": "relion - autopick log",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": 250,
        "minDiameter": 150,
        "maxDiameter": 180,
        "areParticlesWhite": false,
        "maxResolution": 20.0,
        "threshold": 0.0,
        "extraParams": "",
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "85.outputMicrographs"
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "285",
        "object.label": "relion - extract",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": 256,
        "doRescale": true,
        "rescaledSize": 64,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": 200,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 2,
        "ctfRelations": "168.outputCTF",
        "inputCoordinates": "238.outputCoordinates"
    },
    {
        "object.className": "SphireProtCRYOLOPicking",
        "object.id": "350",
        "object.label": "sphire - cryolo picking",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGenMod": true,
        "conservPickVar": 0.3,
        "lowPassFilter": true,
        "absCutOffFreq": 0.1,
        "input_size": 1024,
        "boxSize": 256,
        "max_box_per_image": 600,
        "num_patches": 1,
        "gpuList": "0 1",
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "inputMicrographs": "85.outputMicrographs"
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "401",
        "object.label": "motioncorr - movie alignment",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "gpuList": "0 1",
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveMovie": false,
        "doComputePSD": true,
        "doComputeMicThumbnail": true,
        "extraProtocolParams": "--use_worker_thread",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "tol": 0.5,
        "doSaveUnweightedMic": true,
        "doMagCor": false,
        "useEst": true,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "extraParams2": "",
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "520",
        "object.label": "relion - 2D classification",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": 160,
        "maskZero": 0,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 50,
        "regularisationParamT": 2,
        "numberOfIterations": 15,
        "useFastSubsets": false,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 5.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "--maxsig 25 --dont_check_norm",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 3,
        "inputParticles": "285.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "598",
        "object.label": "good parts",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": "331",
        "sqliteFile": "Runs/000520_ProtRelionClassify2D/classes2D_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "520."
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "650",
        "object.label": "good avgs",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": "331",
        "sqliteFile": "Runs/000520_ProtRelionClassify2D/classes2D_state.sqlite,",
        "outputClassName": "SetOfAverages,Representatives",
        "inputObject": "520."
    },
    {
        "object.className": "ProtRelionInitialModel",
        "object.id": "702",
        "object.label": "relion - 3D initial model",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doContinue": false,
        "maskDiameterA": 180,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "numberOfClasses": 1,
        "doFlattenSolvent": true,
        "symmetryGroup": "c1",
        "angularSamplingDeg": 1,
        "offsetSearchRangePix": 6.0,
        "offsetSearchStepPix": 2.0,
        "numberOfIterInitial": 25,
        "numberOfIterInBetween": 100,
        "numberOfIterFinal": 25,
        "writeIter": 10,
        "initialRes": 35,
        "finalRes": 15,
        "initialBatch": 100,
        "finalBatch": 500,
        "sgdNoiseVar": -1,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "skipPadding": false,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "extraParams": "--maxsig 25",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 3,
        "inputParticles": "598.outputParticles"
    },
    {
        "object.className": "ProtCTFFind",
        "object.id": "765",
        "object.label": "grigoriefflab - ctffind4",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "AutoDownsampling": false,
        "ctfDownFactor": 1.0,
        "useCtffind4": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 3.15,
        "stepPhaseShift": 0.2,
        "resamplePix": true,
        "slowSearch": true,
        "lowRes": 0.035,
        "highRes": 0.35,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "401.outputMicrographs"
    },
    {
        "object.className": "ProtRelionSymmetrizeVolume",
        "object.id": "849",
        "object.label": "relion - symmetrize volume",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "symmetryGroup": "d2",
        "hostName": "localhost",
        "inputVolume": "702.outputVolume"
    },
    {
        "object.className": "ProtRelionClassify3D",
        "object.id": "892",
        "object.label": "relion - 3D classification",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": 180,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "d2",
        "initialLowPassFilterA": 40.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 3,
        "regularisationParamT": 4,
        "numberOfIterations": 15,
        "useFastSubsets": false,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localAngularSearch": false,
        "localAngularSearchRange": 5.0,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "skipPadding": false,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "--maxsig 25",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 3,
        "inputParticles": "598.outputParticles",
        "referenceVolume": "849.outputVolumeSymmetrized"
    },
    {
        "object.className": "ProtExtractCoords",
        "object.id": "998",
        "object.label": "scipion - extract coordinates",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "applyShifts": true,
        "hostName": "localhost",
        "inputMicrographs": "401.outputMicrographsDoseWeighted",
        "inputParticles": "598.outputParticles"
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "1038",
        "object.label": "relion - extract (copy)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": 256,
        "doRescale": false,
        "rescaledSize": 64,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": 200,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 2,
        "ctfRelations": "168.outputCTF",
        "inputCoordinates": "998.outputCoordinates"
    },
    {
        "object.className": "ProtRelionRefine3D",
        "object.id": "1103",
        "object.label": "relion - 3D auto-refine",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": false,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": 180,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "d2",
        "initialLowPassFilterA": 40.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "noteAutoSampling": null,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSamplingDeg": 4,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "skipPadding": false,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "--maxsig 25",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 3,
        "referenceVolume": "892.outputVolumes.1",
        "inputParticles": "1038.outputParticles"
    },
    {
        "object.className": "ProtRelionCreateMask3D",
        "object.id": "1301",
        "object.label": "relion - create 3d mask",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "initialLowPassFilterA": 30.0,
        "threshold": 0.002,
        "doCompare": false,
        "operation": 0,
        "extend": 5,
        "edge": 3,
        "doInvert": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputVolume": "1103.outputVolume"
    },
    {
        "object.className": "ProtRelionPostprocess",
        "object.id": "1340",
        "object.label": "relion - post-processing ",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "calibratedPixelSize": 0.0,
        "mtf": "/usr/local/scipion/plugins/scipion-em-relion/relion/convert/mtfs/mtf_f3_200_ec.star",
        "doAutoBfactor": true,
        "bfactorLowRes": 10.0,
        "bfactorHighRes": 0.0,
        "bfactor": -350.0,
        "skipFscWeighting": false,
        "lowRes": 5.0,
        "filterEdgeWidth": 2,
        "randomizeAtFsc": 0.8,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "protRefine": "1103.",
        "solventMask": "1301.outputMask"
    },
    {
        "object.className": "ProtRelionCtfRefinement",
        "object.id": "1394",
        "object.label": "relion - ctf refinement",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "minResolution": 30.0,
        "doCtfFitting": true,
        "fitPartDefocus": true,
        "rangeDefocusFit": 2000,
        "fitAstig": 0,
        "fitMicPhaseShift": false,
        "doBeamtiltEstimation": false,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 5,
        "inputParticles": "1103.outputParticles",
        "inputPostprocess": "1340."
    },
    {
        "object.className": "ProtRelionRefine3D",
        "object.id": "1715",
        "object.label": "relion - 3D auto-refine (copy 2)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": false,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": true,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": 180,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "d2",
        "initialLowPassFilterA": 40.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "noteAutoSampling": null,
        "doImageAlignment": true,
        "angularSamplingDeg": 4,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSamplingDeg": 4,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "skipPadding": false,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "--maxsig 25",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 3,
        "referenceVolume": "892.outputVolumes.1",
        "inputParticles": "1394.outputParticles"
    },
    {
        "object.className": "ProtRelionCreateMask3D",
        "object.id": "1792",
        "object.label": "relion - create 3d mask (copy 2)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "initialLowPassFilterA": 30.0,
        "threshold": 0.002,
        "doCompare": false,
        "operation": 0,
        "extend": 5,
        "edge": 3,
        "doInvert": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputVolume": "1715.outputVolume"
    },
    {
        "object.className": "ProtRelionPostprocess",
        "object.id": "1831",
        "object.label": "relion - post-processing (copy 2)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "calibratedPixelSize": 0.0,
        "mtf": "/usr/local/scipion/plugins/scipion-em-relion/relion/convert/mtfs/mtf_f3_200_ec.star",
        "doAutoBfactor": true,
        "bfactorLowRes": 10.0,
        "bfactorHighRes": 0.0,
        "bfactor": -350.0,
        "skipFscWeighting": false,
        "lowRes": 5.0,
        "filterEdgeWidth": 2,
        "randomizeAtFsc": 0.8,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "protRefine": "1103.",
        "solventMask": "1792.outputMask"
    },
    {
        "object.className": "ProtRelionBayesianPolishing",
        "object.id": "2220",
        "object.label": "relion - bayesian polishing (copy 2)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frame0": 1,
        "frameN": 0,
        "operation": 1,
        "fractionFourierPx": 0.5,
        "numberOfParticles": 10000,
        "sigmaVel": 0.2,
        "sigmaDiv": 5000.0,
        "sigmaAcc": 2.0,
        "minResBfactor": 20.0,
        "maxResBfactor": -1.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 5,
        "inputMovies": "85.outputMovies",
        "inputParticles": "1715.outputParticles",
        "inputPostprocess": "1831."
    },
    {
        "object.className": "ProtRelionRefine3D",
        "object.id": "2264",
        "object.label": "relion - 3D auto-refine (copy 4)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": false,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": true,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": 200,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "d2",
        "initialLowPassFilterA": 40.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "noteAutoSampling": null,
        "doImageAlignment": true,
        "angularSamplingDeg": 4,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSamplingDeg": 4,
        "useParallelDisk": true,
        "pooledParticles": 30,
        "skipPadding": false,
        "allParticlesRam": true,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "--maxsig 25",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 3,
        "referenceVolume": "892.outputVolumes.1",
        "inputParticles": "2220.outputParticles"
    },
    {
        "object.className": "ProtRelionCreateMask3D",
        "object.id": "2341",
        "object.label": "relion - create 3d mask (copy 4)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "initialLowPassFilterA": 30.0,
        "threshold": 0.002,
        "doCompare": false,
        "operation": 0,
        "extend": 5,
        "edge": 3,
        "doInvert": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputVolume": "2264.outputVolume"
    },
    {
        "object.className": "ProtRelionPostprocess",
        "object.id": "2380",
        "object.label": "relion - post-processing (copy 4)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "calibratedPixelSize": 0.0,
        "mtf": "/usr/local/scipion/plugins/scipion-em-relion/relion/convert/mtfs/mtf_f3_200_ec.star",
        "doAutoBfactor": true,
        "bfactorLowRes": 10.0,
        "bfactorHighRes": 0.0,
        "bfactor": -350.0,
        "skipFscWeighting": false,
        "lowRes": 5.0,
        "filterEdgeWidth": 2,
        "randomizeAtFsc": 0.8,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "protRefine": "1103.",
        "solventMask": "2341.outputMask"
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "2483",
        "object.label": "xmipp3 - manual-picking (step 1)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "saveDiscarded": false,
        "doInteractive": true,
        "inputMicrographs": "401.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "XmippParticlePickingAutomatic",
        "object.id": "2525",
        "object.label": "xmipp3 - auto-picking (step 2)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "micsToPick": 0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "xmippParticlePicking": "2483."
    }
]